Documentation for registration

Sample file format:
------------------------------------------

## Comments begin with '#', blank lines are ignored
## A "GLOBAL" section is required, and specifies the inputs 
## and optional outputs.  
## 
## For the output files, it is similar, but not exactly the same 
## as putting them in the last stage.  
## 
## The use of xform_out is undefined when xform=vf, 
## such as demons registration.  Use vf_out instead.
[GLOBAL]
fixed=t0p_221.mha
moving=t5p_221.mha
xform_in=my_bsp.txt
vf_out=my_output_vf.mha
xform_out=my_output_bsp.txt
img_out=my_output_img.mha

## Use a "STAGE" section for each stage of processing.  
## You can get outputs (vf_out, xform_out, and img_out) if 
## you like. 
## Default values will be used for each option unless you 
## override them here. 
[STAGE]
xform=bspline
optim=lbfgsb
impl=gpuit_cpu
# Quit after 50 iterations
max_its=50
# Quit if change in score differs by less than 3
convergence_tol=3
# Quit if gradient norm is less than 0.1
grad_tol=0.1
# B-spline grid spacing (in mm)
grid_spac=30 30 30
# Subsample by 4,4,2 in x,y,z directions
res=4 4 2
# At the end of this stage, output the final xform
xform_out=stage_1_output_bsp.txt

## For each subsequent stage, add another "STAGE" section.
## You only need to include parameters that you want to change.
## Any unspecified parameter is inherited from the 
## previous stage.
[STAGE]
max_its=20
convergence_tol=4
grad_tol=0.2
res=2 2 1

## To run demons, set optim to "demons" and xform to "vf." 
[STAGE]
xform=vf
optim=demons
impl=itk
vf_out=output_2.mha

## If you want to, you can use a "COMMENT" section 
## to comment out a stage.
[COMMENT]
xform=bspline
max_its=200

## GPU acceleration requires GPUIT implementation
[STAGE]
optim=demons
xform=vf
impl=gpuit_gpu
res=4 4 2
max_its=200
# Std dev of smoothing kernel (in mm)
demons_std=10
# "Gain" factor, higher gains are faster but less robust
demons_acceleration=5
# Homogenezation is the tradeoff between gradient 
# and image difference.  Values should increase for larger 
# voxel sizes, going down to about 1 for 1mm voxels.
demons_homogenization=30
# This is the size of the filter (in voxels)
demons_filter_width=5 5 5
